# Generated by Configurator on Sat Aug 20 17:43:52 PDT 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM7,SerialManager,COM7
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-B,SutterLambda,Wheel-B
Device,Wheel-C,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,XYStage,Prior,XYStage
Device,Prime95B,PVCAM,Camera-1

# Pre-init settings for devices
Property,COM1,AnswerTimeout,2000.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,9600
Property,COM2,DataBits,8
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Fast USB to Serial,Disable
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,Wheel-A,Port,COM7
Property,Wheel-A,Timeout(ms),500
Property,Wheel-B,Port,COM7
Property,Wheel-B,Timeout(ms),500
Property,Wheel-C,Port,COM7
Property,Wheel-C,Timeout(ms),500
Property,Shutter-A,Port,COM7
Property,XYStage,Port,COM2

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TIDiaShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,Prime95B
Property,Core,Shutter,Shutter-A
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,Open5
Label,TINosePiece,4,10x
Label,TINosePiece,3,100x
Label,TINosePiece,2,40x
Label,TINosePiece,1,20x
Label,TINosePiece,0,Open0
# TIFilterBlock1
Label,TIFilterBlock1,5,TxRed
Label,TIFilterBlock1,4,GFP-L
Label,TIFilterBlock1,3,560LP
Label,TIFilterBlock1,2,595LP
Label,TIFilterBlock1,1,455LP
Label,TIFilterBlock1,0,DIC
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100
# Wheel-A
Label,Wheel-A,9,760/20
Label,Wheel-A,8,470/30
Label,Wheel-A,7,580/20
Label,Wheel-A,6,515/10
Label,Wheel-A,5,open
Label,Wheel-A,4,495/10
Label,Wheel-A,3,660/20
Label,Wheel-A,2,546/11
Label,Wheel-A,1,630/30
Label,Wheel-A,0,420/40
# Wheel-B
Label,Wheel-B,9,open
Label,Wheel-B,8,closed
Label,Wheel-B,7,closed
Label,Wheel-B,6,700/75
Label,Wheel-B,5,650/100
Label,Wheel-B,4,630/20
Label,Wheel-B,3,575/20
Label,Wheel-B,2,open
Label,Wheel-B,1,535/30
Label,Wheel-B,0,480/40
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Filter-4
Label,Wheel-C,3,32%
Label,Wheel-C,2,10%
Label,Wheel-C,1,1%
Label,Wheel-C,0,100%

# Configuration presets
# Group: Intensity
# Preset: 32%
ConfigGroup,Intensity,32%,Wheel-C,Label,32%

# Preset: 100%
ConfigGroup,Intensity,100%,Wheel-C,Label,100%

# Preset: 10%
ConfigGroup,Intensity,10%,Wheel-C,Label,10%

# Preset: 1%
ConfigGroup,Intensity,1%,Wheel-C,Label,1%


# Group: Magnification
# Preset: 20x
ConfigGroup,Magnification,20x,TINosePiece,Label,20x

# Preset: 40x
ConfigGroup,Magnification,40x,TINosePiece,Label,40x

# Preset: 10x
ConfigGroup,Magnification,10x,TINosePiece,Label,10x

# Preset: 100x
ConfigGroup,Magnification,100x,TINosePiece,Label,100x


# Group: Channel
# Preset: BL10
ConfigGroup,Channel,BL10,TIFilterBlock1,Label,595LP
ConfigGroup,Channel,BL10,Wheel-A,Label,470/30
ConfigGroup,Channel,BL10,Wheel-B,Label,closed
ConfigGroup,Channel,BL10,Wheel-C,Label,10%
ConfigGroup,Channel,BL10,Shutter-A,State,0
ConfigGroup,Channel,BL10,Core,AutoShutter,0
ConfigGroup,Channel,BL10,Core,Shutter,Shutter-A

# Preset: BL100
ConfigGroup,Channel,BL100,TIFilterBlock1,Label,595LP
ConfigGroup,Channel,BL100,Wheel-A,Label,470/30
ConfigGroup,Channel,BL100,Wheel-B,Label,closed
ConfigGroup,Channel,BL100,Wheel-C,Label,100%
ConfigGroup,Channel,BL100,Shutter-A,State,0
ConfigGroup,Channel,BL100,Core,AutoShutter,0
ConfigGroup,Channel,BL100,Core,Shutter,Shutter-A

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,DIC
ConfigGroup,Channel,DIC,Wheel-A,Label,open
ConfigGroup,Channel,DIC,Wheel-B,Label,open
ConfigGroup,Channel,DIC,Shutter-A,State,0
ConfigGroup,Channel,DIC,Core,AutoShutter,1
ConfigGroup,Channel,DIC,Core,Shutter,TIDiaShutter
ConfigGroup,Channel,DIC,Wheel-C,Label,100%

# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,GFP-L
ConfigGroup,Channel,YFP,Wheel-A,Label,515/10
ConfigGroup,Channel,YFP,Wheel-B,Label,open
ConfigGroup,Channel,YFP,Shutter-A,State,0
ConfigGroup,Channel,YFP,Core,AutoShutter,1
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,YFP,Wheel-C,Label,100%

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,GFP-L
ConfigGroup,Channel,GFP,Wheel-A,Label,open
ConfigGroup,Channel,GFP,Wheel-B,Label,open
ConfigGroup,Channel,GFP,Shutter-A,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,GFP,Wheel-C,Label,100%

# Preset: TxRed
ConfigGroup,Channel,TxRed,TIFilterBlock1,Label,TxRed
ConfigGroup,Channel,TxRed,Wheel-A,Label,open
ConfigGroup,Channel,TxRed,Wheel-B,Label,open
ConfigGroup,Channel,TxRed,Shutter-A,State,0
ConfigGroup,Channel,TxRed,Core,AutoShutter,1
ConfigGroup,Channel,TxRed,Core,Shutter,Shutter-A
ConfigGroup,Channel,TxRed,Wheel-C,Label,100%

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,455LP
ConfigGroup,Channel,CFP,Wheel-A,Label,420/40
ConfigGroup,Channel,CFP,Wheel-B,Label,480/40
ConfigGroup,Channel,CFP,Shutter-A,State,0
ConfigGroup,Channel,CFP,Core,AutoShutter,1
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,CFP,Wheel-C,Label,100%

# Preset: BL1
ConfigGroup,Channel,BL1,TIFilterBlock1,Label,595LP
ConfigGroup,Channel,BL1,Wheel-A,Label,470/30
ConfigGroup,Channel,BL1,Wheel-B,Label,closed
ConfigGroup,Channel,BL1,Shutter-A,State,0
ConfigGroup,Channel,BL1,Core,AutoShutter,0
ConfigGroup,Channel,BL1,Core,Shutter,Shutter-A
ConfigGroup,Channel,BL1,Wheel-C,Label,1%

# Preset: mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,595LP
ConfigGroup,Channel,mCherry,Wheel-A,Label,580/20
ConfigGroup,Channel,mCherry,Wheel-B,Label,650/100
ConfigGroup,Channel,mCherry,Shutter-A,State,0
ConfigGroup,Channel,mCherry,Core,AutoShutter,1
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter-A
ConfigGroup,Channel,mCherry,Wheel-C,Label,100%


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Prime95B,Exposure,100.0000
ConfigGroup,System,Startup,Wheel-A,Speed,1
ConfigGroup,System,Startup,Wheel-B,Speed,1
ConfigGroup,System,Startup,Wheel-C,Speed,1
ConfigGroup,System,Startup,Prime95B,ReadoutRate,100MHz 16bit
ConfigGroup,System,Startup,Prime95B,Binning,1x1
ConfigGroup,System,Startup,Prime95B,Gain,1-HDR
ConfigGroup,System,Startup,Prime95B,ClearMode,Pre-Exposure and Post-Sequence
ConfigGroup,System,Startup,Prime95B,ExposeOutMode,Any Row
ConfigGroup,System,Startup,XYStage,Acceleration,50
ConfigGroup,System,Startup,XYStage,MaxSpeed,50
ConfigGroup,System,Startup,XYStage,SCurve,100
ConfigGroup,System,Startup,Prime95B,ShutterMode,Pre-Exposure
ConfigGroup,System,Startup,Prime95B,MetadataEnabled,No
ConfigGroup,System,Startup,Prime95B,Offset,100
ConfigGroup,System,Startup,Prime95B,CCDTemperatureSetPoint,0.0000
ConfigGroup,System,Startup,Prime95B,FanSpeedSetpoint,Medium
ConfigGroup,System,Startup,Prime95B,CircularBufferAutoSize,ON
ConfigGroup,System,Startup,Prime95B,CircularBufferEnabled,ON
ConfigGroup,System,Startup,Prime95B,ClearCycles,2
ConfigGroup,System,Startup,Prime95B,PMode,Normal


# Group: LightPath
# Preset: Camera
ConfigGroup,LightPath,Camera,TILightPath,Label,Left100

# Preset: Eye
ConfigGroup,LightPath,Eye,TILightPath,Label,Eye100



# PixelSize settings

